<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:System.Windows.Forms;assembly=System.Windows.Forms, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089"
                 xmlns:pylon="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>../../../Documents/data/Expe</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>folderBaseName</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\generateTimestampedFolder.bonsai" />
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>None</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Keys">
                <Value>Space</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>triggerRec</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>None</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Keys">
                <Value>F</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>triggerStop</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="trialDuration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT40S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>trialDuration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="nTrials" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>60</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>nTrials</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>pathName</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="timestampsBaseName" Description="Base name for file saving basler cam timestamps" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>video_timestamps_.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SerialNumber" />
              <Property Name="ParameterFile" />
              <Property Name="GrabStrategy" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="pylon:PylonCapture">
                <pylon:SerialNumber>21582249</pylon:SerialNumber>
                <pylon:GrabStrategy>OneByOne</pylon:GrabStrategy>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>../../../Documents/data/Expe_2024-04-03_02-10-46/video_timestamps_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai" />
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Images</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Images</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>pathName</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="videoBaseName" Description="Base name for file recording webcam images" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>video_.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>../../../Documents/data/Expe_2024-04-03_02-10-46/video_.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\timing.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Images</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>trialDuration</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="22" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="20" To="24" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="34" Label="Source1" />
            <Edge From="28" To="31" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source2" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="36" To="38" Label="Source1" />
            <Edge From="37" To="38" Label="Source2" />
            <Edge From="38" To="39" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>